/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": 
    {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "31817",
            "base-frame": {
                "reference-frame": "TableCenter",
                "transform": [[ 0.965925826, -0.258819045, 0.0,   0.0868201],
                              [ 0.258819045,  0.965925826, 0.0,  -0.110485],
                              [ 0.0,          0.0,         1.0,   0.0],
                              [ 0.0,          0.0,         0.0,  1.0]]
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "28060",
            "base-frame": {
                "reference-frame": "TableCenter",
                "transform": [[  0.965925826,  0.258819045, 0.0,  -0.110619],
                              [ -0.258819045,  0.965925826, 0.0,  -0.100955],
                              [  0.0,          0.0,         1.0,   0.0],
                              [  0.0,          0.0,         0.0,   1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "33569"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "28129"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1"
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2"
        }
    ]
}
