/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM_DERIVED",
            "io": "xml/sawRobotIO1394-PSM2-28275.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM_DERIVED",
            "io": "xml/sawRobotIO1394-MTML-foot-pedal-30594.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "type": "TELEOP_PSM_GENERIC",
            "master": "MTML",
            "slave": "PSM2"
        }
    ]
}
