/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM1-27334.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM2-28275.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTMR-23877.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "arm" : "MTMR-23877.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTML-30594.xml",
            "pid": "sawControllersPID-MTML.xml",
            "arm" : "MTML-30594.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "configure-parameter":
            {
                "rotation": [[-1.0, 0.0, 0.0],
                             [ 0.0,-1.0, 0.0],
                             [ 0.0, 0.0, 1.0]]
            }
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2",
            "configure-parameter":
            {
                "rotation": [[-1.0, 0.0, 0.0],
                             [ 0.0,-1.0, 0.0],
                             [ 0.0, 0.0, 1.0]]
            }
        }
    ]
}
