/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-foot-pedal-73298.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-31519.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
