/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see dVRK user guide
    "DH": {
        "links": [
            {
                "convention": "modified",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  1.5708,
                "qmin": -1.5708, // -90
                "qmax":  1.5708  //  90
            },
            {
                "convention": "modified",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -0.7853, // -45
                "qmax":  1.1344  //  65
            },
            {
                "convention": "modified",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "prismatic",
                "mode": "active",
                "offset": -0.3822,
                "qmin": 0.0,
                "qmax": 0.235 // meters
            },
            {
                "convention": "modified",
                "alpha":  0.0000, "A":  0.0000, "theta":  0.0000, "D":  0.3829,
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000,
                "qmin": -1.5708, // -90
                "qmax":  1.5708  //  90
            }
        ]
    }
    ,
    // rotation to match ISI convention (for read-only research API on commercial da Vinci)
    "tooltip-offset" : [[ 0.0,  1.0,  0.0,  0.0],
                        [-1.0,  0.0,  0.0,  0.0],
                        [ 0.0,  0.0,  1.0,  0.0],
                        [ 0.0,  0.0,  0.0,  1.0]]
    // ,
    // "homing-zero-position": 1 // or 0 for false
}
