/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "27374",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "22723",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTML",
            "psm": "PSM2",
            "configure-parameter": {
                "scale": 0.4,
                "jaw-rate": 6.3 // rad per second
            }
        }
    ]
}
