/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
	        "name": "PSM2",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "arm": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json",
            "base-frame": {
                "reference-frame": "Mount",
                "transform": [[ -1.0,  0.0,  0.0,  0.0],
                              [  0.0, -1.0,  0.0,  0.0 ],
                              [  0.0,  0.0,  1.0,  0.0 ],
                              [  0.0,  0.0,  0.0,  1.0 ]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "22723"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTML",
            "psm": "PSM2"
        }
    ]
}
