/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "firewire-protocol": "broadcast-read-write",
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-32204.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-34863.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTML",
            "slave": "PSM2",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
