/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-22403-foot-pedal.xml",
            "pid": "../sawControllersPID-MTMR.xml",
            "kinematic": "../dvmtm.rob"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-34863.xml",
            "pid": "../sawControllersPID-MTML.xml",
            "kinematic": "../dvmtm.rob"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "simulation": "KINEMATIC",
            // "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "../sawControllersPID-ECM.xml",
            "kinematic": "../dvecm.rob"
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM3-28613.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM3" ,
            "rotation" : [[-1.0000,  0.0000,  0.0000],
			              [ 0.0000, -1.0000,  0.0000],
			              [ 0.0000,  0.0000,  1.0000]]
        }
    ]
    ,
    "ecm-teleop":
    {
        "master-left": "MTML",
        "master-right": "MTMR",
        "slave": "ECM",
        "period": 0.005, // in seconds
        "rotation" : [[ 1.0000,  0.0000,  0.0000],
			          [ 0.0000,  1.0000,  0.0000],
			          [ 0.0000,  0.0000,  1.0000]]
    }
}
