/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "28613",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
    ]
}
