/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see dVRK user guide
    "DH": {
        "convention": "modified",
        "links": [
            { // 1
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  1.5708,
                "qmin": -2.964,
                "qmax":  2.964,
                "ftmax": 17.0845 // maxA / Nm_to_A from sawRobotIO
            },
            { // 2
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -1.10,
                "qmax":  1.04,
                "ftmax": 34.0845 // maxA / Nm_to_A from sawRobotIO
            },
            { // 3
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "prismatic",
                "mode": "active",
                "offset": -0.3822,
                "qmin": 0.001,
                "qmax": 0.259, // meters
                "ftmax": 70.900 // maxA / Nm_to_A from sawRobotIO
            },
            { // 4
                "alpha":  0.0000, "A":  0.0000, "theta":  0.0000, "D":  0.3829,
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000,
                "qmin": -1.54, // almost -90
                "qmax":  1.54, // almost  90
                "ftmax": 6.81923 // maxA / Nm_to_A from sawRobotIO
            }
        ]
    }
}
