/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see dVRK user guide

    // DH parameters from Jack's code
    // unit: rad and m


    "DH": {
        "convention": "modified",
        "joints": [
            { // 1, add q1 to theta
                "name": "yaw",
                "alpha":  1.5708, "A":  0.0000, "theta":  1.5708, "D":  0.0000,
                "type": "revolute",
                "mode": "active"
            },
            { // 2
                "name": "intermediate yaw",
                "alpha":  -1.5708, "A":  -0.0712, "theta":  1.5708, "D":  0.0000,
                "type": "revolute",
                "mode": "virtual"
            },
            { // 3, add q2 to theta
                "name": "pitch1",
                "alpha": 0.0000, "A":  0.2913, "theta":  -1.5708, "D":  0.0000,
                "type": "revolute",
                "mode": "active"
            },
            { // 4
                "name": "intermediate pitch 1",
                "alpha": 1.5708, "A":  0.1810, "theta":  0.0000, "D":  0.0922,
                "type": "revolute",
                "mode": "virtual"
            },
            { // 5, add -q2 to theta
                "name": "pitch2",
                "alpha": -1.5708, "A":  0.0000, "theta":  1.5708, "D":  0.0000,
                "type": "revolute",
                "mode": "active"
            },
            { // 6
                "name": "intermediate pitch 3",
                "alpha": 1.5708, "A":  0.33872, "theta":  0.0000, "D":  0.0712,
                "type": "revolute",
                "mode": "virtual"
            },
            { // 7, add q2 to theta
                "name": "pitch4",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active"
            },
            { // 8, add q3 to D
                "name": "insertion1",
                "alpha": -1.5708, "A":  0.0922, "theta":  0.0000, "D":  -0.3015,
                "type": "prismatic",
                "mode": "active"
            },
            { // 9, add -q3/2 to D
                "name": "insertion2", // the mid board
                "alpha":  0.0000, "A":  -0.032, "theta":  0.0000, "D":  0.1800,
                "type": "prismatic",
                "mode": "active"
            }
            /*
            ,
            { // 10, add q4 to theta, NOTE **: this one attached to joint 8
                "name": "tool roll",
                "alpha": 0.0000, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active"
            }
            { // 11, add q5 to theta
                "name": "tool pitch",
                "alpha": 1.5708, "A":  0.0000, "theta":  1.5708, "D":  0.0000,
                "type": "revolute",
                "mode": "active"
            },
            { // 12, add q6 to theta
                "name": "tool pitch",
                "alpha": -1.5708, "A":  0.0091, "theta":  1.5708, "D":  0.0000,
                "type": "revolute",
                "mode": "active"
            },
            { // 13, add q7 to theta, NOTE **: this one attached to joint 11
                "name": "tool pitch",
                "alpha": -1.5708, "A":  0.0091, "theta":  1.5708, "D":  0.0000,
                "type": "revolute",
                "mode": "active"
            }
            */
        ]
    }
}
