/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
		{
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-foot-pedal-35185_cal.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-29470_cal.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }


    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM2"
        }
    ]
}
