/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see dVRK user guide
    "DH": {
        "convention": "modified",
        "joints": [
            {
                "name": "roll",
                "alpha":  0.0000, "A":  0.0000, "theta":  0.0, "D":  0.41557,  // last number from ISI
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000,
                "qmin": -4.4506, // -255 degrees
                "qmax":  4.4506, //  255 degrees
                "ftmax": 0.33
            },
            {
                "name": "wrist_pitch",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -0.5236, // -30 degrees
                "qmax":  0.5236, //  30 degrees
                "ftmax": 0.25
            },
            {
                "name": "wrist_yaw",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -0.5236, // -30 degrees
                "qmax":  0.5236, //  30 degrees
                "ftmax": 0.20
            }
        ]
    }
    ,
    "jaw" : {
        "qmin":  0.0,        //  0 degrees
        "qmax":  0.2617990,  // 12 degrees
        "ftmax": 0.19
    }
    ,
    // rotation to match ISI convention (for read-only research API on commercial da Vinci)
    "tooltip_offset" : [[ 1.0,  0.0,  0.0,  0.0],
                        [ 0.0,  0.0,  1.0,  0.0],
                        [ 0.0, -1.0,  0.0,  0.0],
                        [ 0.0,  0.0,  0.0,  1.0]]
    ,
    // WARNING: if we change these, also change tool_engage_position
    "coupling" : {
        // from ISI
        "ActuatorToJointPosition" : [[ -1.529411,  0.000000,  0.000000,  0.000000],
                                     [  0.000000,  0.000000,  0.284979,  0.284979],
                                     [  0.000000,  0.000000, -0.415594,  0.415594],
                                     [  0.000000,  0.157832, -0.035139, -0.035139]]
    }
    ,
    // angles used to engage the tool, in radians
    // make sure these are within the range of motion IN the cannula
    // max range on roll, 2, 2, 2 degrees
    "tool_engage_position" : {
        "lower" : [-4.5378, -0.034, -0.034, 0.0],
        "upper" : [ 4.5378,  0.034,  0.034, 0.034]
    }
}
